PsychoPy2experiment version="1.85.4"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = movingDots
  Screen = 1
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Routines
  Routine trial
    ImageComponent image
      stopVal [duration (s)] = 0.030
      pos [set every repeat] = [xpos.pop(), 0]
      units = pix
      startVal [time (s)] = gistTime
      image [set every repeat] = $imgName
      size = (100, 100)
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    PolygonComponent polygon
      stopVal [duration (s)] = 6.0
      lineColor = $[-1,-1,1]
      pos [set every frame] = (dir1*(-150+frameN*xvel1), 0)
      units = pix
      fillColor = $[-1,-1,1]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (20, 20)
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    PolygonComponent polygon_2
      stopVal [duration (s)] = 6.0
      lineColor = $[-1,-1,1]
      pos [set every frame] = (dir2*(-150+frameN*xvel2), 50)
      units = pix
      fillColor = $[-1,-1,1]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (20, 20)
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    PolygonComponent polygon_3
      stopVal [duration (s)] = 6.0
      lineColor = $[0.945,-1.000,-0.929]
      units = pix
      fillColor = $[1,1,1]
      startVal [time (s)] = 0.0
      size = (1, 200)
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    KeyboardComponent key_resp_2
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'm','v'
      startVal [time (s)] = 1.5
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    CodeComponent code
      Begin Experiment:
        xposList = [-500, 500] # initial list
        xposRep = np.repeat(xposList, 5) # repeat
        xpos = np.ndarray.tolist(xposRep) # change objecttype to use .pop
        shuffle(xpos) # randomise order

        xvelRand = np.random.rand(80) # 2 obj x 40 trials
        xvelWiden = xvelRand*1.5+0.5 # maak snelheden tussen 0.5 en 2
        xvelList = np.ndarray.tolist(xvelWiden) # change objecttype to use pop

        gistTimeRand = np.random.rand(40) # 40 trials
        gistTimeWiden = gistTimeRand*3+2 # gist tijd tussen 2 en 5 sec
        gistTimeList = np.ndarray.tolist(gistTimeWiden) # use with pop

        directionRand = np.random.random_integers(0, 1, size = 80) # 2 obj x 40 trials
        directionWiden = directionRand*2-1 # discrete waarden -1 of 1
        directionList = np.ndarray.tolist(directionWiden) # use with pop
      Begin Routine:
        xvel1 = xvelList.pop()
        xvel2 = xvelList.pop()
        gistTime = gistTimeList.pop()
        dir1 = directionList.pop()
        dir2 = directionList.pop()
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 7
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    conditions:
      [{'imgName': u'gist/vrouw1.jpg', 'corrAns': u'v'},
      {'imgName': u'gist/vrouw2.jpg', 'corrAns': u'v'},
      {'imgName': u'gist/vrouw3.jpg', 'corrAns': u'v'},
      {'imgName': u'gist/vrouw4.jpg', 'corrAns': u'v'},
      {'imgName': u'gist/man1.jpg', 'corrAns': u'm'},
      {'imgName': u'gist/man2.jpg', 'corrAns': u'm'},
      {'imgName': u'gist/man3.jpg', 'corrAns': u'm'}]
    Routine trial
  LoopTerminator trials
